PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Project
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Routines
  Routine Instructions
    TextComponent itext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Instructions
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    KeyboardComponent iconfirm
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    PolygonComponent pbox0
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent pbox1
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent pbox2
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent pbox3
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent pbox4
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent pbox5
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent pmouse
      clickable = pbox0,pbox1,pbox2,pbox3,pbox4,pbox5
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveParamsClickable = pclicked
      startVal [time (s)] = 0.0
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    ImageComponent pdiagram
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Trial
    SoundComponent tsound
      sound = A
      startVal [time (s)] = 0.0
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    ImageComponent tdiagram
      image [set every repeat] = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent box0
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent box1
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent box2
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent box3
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent box4
      fillColor = $[1,1,1]
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent box5
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent tmouse
      clickable = box0,box1,box2,box3,box4,box5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = tclicked
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Exit
    TextComponent etext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    KeyboardComponent econfirm
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator practices loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Practice
  LoopTerminator practices
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Trial
  LoopTerminator trials
  Routine Exit
